// modelName model_0
// modelName: Arch_II
def model model_0 as
  def unit m6_per_J as
    unit metre {expo: 6.0};
    unit joule {expo: -1.0};
  enddef;
  def unit s_per_m3 as
    unit metre {expo: -3.0};
    unit second;
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3.0};
  enddef;
  def unit per_m as
    unit metre {expo: -1.0};
  enddef;
  def unit m3_per_s2 as
    unit meter {expo: 3.0};
    unit second {expo: -2.0};
  enddef;
  def unit m3_per_s as
    unit second {expo: -1.0};
    unit metre {expo: 3.0};
  enddef;
  def unit per_s as
    unit second {expo: -1.0};
  enddef;
  def unit J_s_per_m6 as
    unit metre {expo: -6.0};
    unit joule;
    unit second;
  enddef;
  def unit J_s2_per_m6 as
    unit joule;
    unit second {expo: 2.0};
    unit metre {expo: -6.0};
  enddef;
  def unit J_s2_per_m5 as
    unit metre {expo: -5.0};
    unit second {expo: 2.0};
    unit joule;
  enddef;
  def unit per_m3 as
    unit metre {expo: -3.0};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit J_per_m as
    unit metre {expo: -1.0};
    unit joule;
  enddef;
  def unit J_s_per_m3 as
    unit metre {expo: -3.0};
    unit joule;
    unit second;
  enddef;

  def comp ArchII as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 7.785e-03};
    var h: metre;
    var r: metre {init: 3.56e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp Arch_II as
  enddef;

  def comp block3 as
  enddef;

  def comp ArchI as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 7.785e-03};
    var h: metre;
    var r: metre {init: 3.56e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp Arch_I as
  enddef;

  def comp block1 as
  enddef;

  def comp AorticRoot as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 12.0e-03};
    var h: metre;
    var r: metre {init: 6.43e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var C00: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var Sf_in: m3_per_s {pub: in};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var u_Rd: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u_C00: J_per_m3 {init: 0.0};
    var v_C00: m3_per_s;
    var v_out: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    C00 = C/2{dimensionless};
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    // 0-junc input
    v_C00 = Sf_in-v_I;
    ode(u_C00, t) = v_C00/C00;
    // 1-junc_a
    u_I = u_C00-u-u_R;
    ode(v_I, t) = u_I/I;
    u_R = R*v_I;
    // 0-junc
    v_C = v_I-v_out;
    // 1-junc_b
    u_C = u-u_Rd;
    u_Rd = Rd*v_C;
    ode(u_C, t) = v_C/C00;
  enddef;

  def comp Aortic_root as
  enddef;

  def comp AscendingAorta as
  enddef;

  def comp Ascending as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 12.33e-03};
    var h: metre;
    var r: metre {init: 5.03e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block2 as
  enddef;

  def comp Left_common_carotid as
  enddef;

  def comp LeftCarotid as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 45.03e-03};
    var h: metre;
    var r: metre {init: 1.71e-03};
    var I: J_s2_per_m6;
    var It: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var Rt: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_Rt: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_R: J_per_m3;
    var v_It: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 0.0};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r))/2{dimensionless};
    It = I;
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}))/2{dimensionless};
    Rt = R;
    Rd = 0.01{second}/C;
    u_R = R*v_I;
    ode(v_I, t) = (u_in-u-u_R)/I;
    ode(u_C, t) = (v_I-v_It)/C;
    u = u_C+Rd*(v_I-v_It);
    u_Rt = Rt*v_It;
    ode(v_It, t) = (u-u_Rt-u_out)/It;
  enddef;

  def comp block4 as
  enddef;

  def comp Left_subclavian as
  enddef;

  def comp LeftSubclavian as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 57.79e-03};
    var h: metre;
    var r: metre {init: 1.35e-03};
    var I: J_s2_per_m6;
    var It: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var Rt: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_Rt: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_R: J_per_m3;
    var v_It: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 0.0};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r))/2{dimensionless};
    It = I;
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}))/2{dimensionless};
    Rt = R;
    Rd = 0.01{second}/C;
    u_R = R*v_I;
    ode(v_I, t) = (u_in-u-u_R)/I;
    ode(u_C, t) = (v_I-v_It)/C;
    u = u_C+Rd*(v_I-v_It);
    u_Rt = Rt*v_It;
    ode(v_It, t) = (u-u_Rt-u_out)/It;
  enddef;

  def comp block5 as
  enddef;

  def comp Descending_Aorta as
  enddef;

  def comp Descending as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 101.93e-03};
    var h: metre;
    var r: metre {init: 2.89e-03};
    var I: J_s2_per_m6;
    var It: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var Rt: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_Rt: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_R: J_per_m3;
    var v_It: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 0.0};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r))/2{dimensionless};
    It = I;
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}))/2{dimensionless};
    Rt = R;
    Rd = 0.01{second}/C;
    u_R = R*v_I;
    ode(v_I, t) = (u_in-u-u_R)/I;
    ode(u_C, t) = (v_I-v_It)/C;
    u = u_C+Rd*(v_I-v_It);
    u_Rt = Rt*v_It;
    ode(v_It, t) = (u-u_Rt-u_out)/It;
  enddef;

  def comp block6 as
  enddef;

  def comp Brachiocephalic_artery as
  enddef;

  def comp Brachiocephalic as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 15.74e-03};
    var h: metre;
    var r: metre {init: 2.75e-03};
    var I: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_I: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_R: J_per_m3;
    var v_R: m3_per_s;
    var u_C: J_per_m3 {init: 0.0};
    var v_C: m3_per_s;
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}));
    Rd = 0.01{second}/C;
    u_I = u_in-u-R*v_I;
    ode(v_I, t) = u_I/I;
    v_C = v_I-v_out_1-v_out_2;
    ode(u_C, t) = v_C/C;
    v_R = v_I-v_out_1-v_out_2;
    u_R = Rd*v_R;
    u = u_C+u_R;
  enddef;

  def comp block7 as
  enddef;

  def comp RightCarotid as
  enddef;

  def comp Right_common_carotid as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 32.09e-03};
    var h: metre;
    var r: metre {init: 1.57e-03};
    var I: J_s2_per_m6;
    var It: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var Rt: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_Rt: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_R: J_per_m3;
    var v_It: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 0.0};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r))/2{dimensionless};
    It = I;
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}))/2{dimensionless};
    Rt = R;
    Rd = 0.01{second}/C;
    u_R = R*v_I;
    ode(v_I, t) = (u_in-u-u_R)/I;
    ode(u_C, t) = (v_I-v_It)/C;
    u = u_C+Rd*(v_I-v_It);
    u_Rt = Rt*v_It;
    ode(v_It, t) = (u-u_Rt-u_out)/It;
  enddef;

  def comp block8 as
  enddef;

  def comp RightSubclavian as
  enddef;

  def comp Right_subclavian as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {pub: in};
    var mu: J_s_per_m3 {init: 0.004};
    var rho: J_s2_per_m5 {init: 1050};
    var E: J_per_m3 {init: 0.6e+6};
    var length: metre {init: 45.94e-03};
    var h: metre;
    var r: metre {init: 1.28e-03};
    var I: J_s2_per_m6;
    var It: J_s2_per_m6;
    var C: m6_per_J;
    var R: J_s_per_m6;
    var Rd: J_s_per_m6;
    var Rt: J_s_per_m6;
    var a: dimensionless {init: 0.2802};
    var b: per_m {init: -505.3};
    var c: dimensionless {init: 0.1324};
    var d: per_m {init: -11.14};
    var u_in: J_per_m3 {pub: in};
    var u_Rt: J_per_m3;
    var v_I: m3_per_s {init: 0.0};
    var u: J_per_m3;
    var u_C: J_per_m3 {init: 0.0};
    var u_R: J_per_m3;
    var v_It: m3_per_s {init: 0.0};
    var u_out: J_per_m3 {init: 0.0};
    h = r*(a*exp(b*r)+c*exp(d*r));
    I = rho*length/(pi*sqr(r))/2{dimensionless};
    It = I;
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*length/(E*h);
    R = 8{dimensionless}*mu*length/(pi*pow(r, 4{dimensionless}))/2{dimensionless};
    Rt = R;
    Rd = 0.01{second}/C;
    u_R = R*v_I;
    ode(v_I, t) = (u_in-u-u_R)/I;
    ode(u_C, t) = (v_I-v_It)/C;
    u = u_C+Rd*(v_I-v_It);
    u_Rt = Rt*v_It;
    ode(v_It, t) = (u-u_Rt-u_out)/It;
  enddef;

  def comp block9 as
  enddef;

  def comp LV as
  enddef;

  def comp LV_output as
    // is: https://identifiers.org/opb/OPB_01023
    var t: second;
    var v_LV: m3_per_s;
    var dv: m3_per_s2 {init: 0};
    var a0: dimensionless {init: 9.674e-05};
    var a1: dimensionless {init: 0.0001364};
    var b1: dimensionless {init: 0.0001125};
    var a2: dimensionless {init: 3.011e-05};
    var b2: dimensionless {init: 0.0001317};
    var a3: dimensionless {init: -3.025e-05};
    var b3: dimensionless {init: 8.194e-05};
    var a4: dimensionless {init: -3.675e-05};
    var b4: dimensionless {init: 3.466e-05};
    var a5: dimensionless {init: -2.669e-05};
    var b5: dimensionless {init: 1.016e-05};
    var a6: dimensionless {init: -1.509e-05};
    var b6: dimensionless {init: -1.615e-06};
    var a7: dimensionless {init: -4.731e-06};
    var b7: dimensionless {init: -4.048e-06};
    var a8: dimensionless {init: -2.427e-07};
    var b8: dimensionless {init: -1.448e-06};
    var w: dimensionless {init: 6.273};
    v_LV = a0+a1*cos(t*w)+b1*sin(t*w)+a2*cos(2{dimensionless}*t*w)+b2*sin(2{dimensionless}*t*w)+a3*cos(3{dimensionless}*t*w)+b3*sin(3{dimensionless}*t*w)+a4*cos(4{dimensionless}*t*w)+b4*sin(4{dimensionless}*t*w)+a5*cos(5{dimensionless}*t*w)+b5*sin(5{dimensionless}*t*w)+a6*cos(6{dimensionless}*t*w)+b6*sin(6{dimensionless}*t*w)+a7*cos(7{dimensionless}*t*w)+b7*sin(7{dimensionless}*t*w)+a8*cos(8{dimensionless}*t*w)+b8*sin(8{dimensionless}*t*w);
    ode(dv, t) = v_LV;
  enddef;

  def group as encapsulation for
    comp LV incl
      comp LV_output;
    endcomp;
    comp block9 incl
      comp RightSubclavian incl
        comp Right_subclavian;
      endcomp;
      comp block8 incl
        comp RightCarotid incl
          comp Right_common_carotid;
        endcomp;
        comp block7 incl
          comp block6 incl
            comp block5 incl
              comp Left_subclavian incl
                comp LeftSubclavian;
              endcomp;
              comp block4 incl
                comp block3 incl
                  comp block2 incl
                    comp block1 incl
                      comp Aortic_root incl
                        comp AorticRoot;
                      endcomp;
                      comp AscendingAorta incl
                        comp Ascending;
                      endcomp;
                    endcomp;
                    comp Arch_I incl
                      comp ArchI;
                    endcomp;
                  endcomp;
                  comp Left_common_carotid incl
                    comp LeftCarotid;
                  endcomp;
                endcomp;
                comp Arch_II incl
                  comp ArchII;
                endcomp;
              endcomp;
            endcomp;
            comp Descending_Aorta incl
              comp Descending;
            endcomp;
          endcomp;
          comp Brachiocephalic_artery incl
            comp Brachiocephalic;
          endcomp;
        endcomp;
      endcomp;
    endcomp;
  enddef;
  def map between Right_subclavian and Brachiocephalic for
    vars v_I and v_out_2;
  enddef;
  def map between Descending and ArchII for
    vars v_I and v_out_2;
  enddef;
  def map between Brachiocephalic and Right_common_carotid for
    vars u and u_in;
  enddef;
  def map between LeftSubclavian and ArchII for
    vars v_I and v_out_1;
  enddef;
  def map between Ascending and ArchI for
    vars u and u_in;
  enddef;
  def map between ArchII and LeftSubclavian for
    vars u and u_in;
  enddef;
  def map between ArchII and Descending for
    vars u and u_in;
  enddef;
  def map between Right_common_carotid and Brachiocephalic for
    vars v_I and v_out_1;
  enddef;
  def map between AorticRoot and Ascending for
    vars u and u_in;
  enddef;
  def map between ArchI and Ascending for
    vars v_I and v_out_1;
  enddef;
  def map between Ascending and Brachiocephalic for
    vars u and u_in;
  enddef;
  def map between LV_output and Right_subclavian for
    vars t and t;
  enddef;
  def map between LV_output and ArchII for
    vars t and t;
  enddef;
  def map between LV_output and LeftSubclavian for
    vars t and t;
  enddef;
  def map between Ascending and AorticRoot for
    vars v_I and v_out;
  enddef;
  def map between ArchI and LeftCarotid for
    vars u and u_in;
  enddef;
  def map between ArchII and ArchI for
    vars v_I and v_out_2;
  enddef;
  def map between Brachiocephalic and Right_subclavian for
    vars u and u_in;
  enddef;
  def map between LV_output and Ascending for
    vars t and t;
  enddef;
  def map between ArchI and ArchII for
    vars u and u_in;
  enddef;
  def map between LV_output and Brachiocephalic for
    vars t and t;
  enddef;
  def map between LV_output and ArchI for
    vars t and t;
  enddef;
  def map between LV_output and LeftCarotid for
    vars t and t;
  enddef;
  def map between LeftCarotid and ArchI for
    vars v_I and v_out_1;
  enddef;
  def map between Brachiocephalic and Ascending for
    vars v_I and v_out_2;
  enddef;
  def map between LV_output and Right_common_carotid for
    vars t and t;
  enddef;
  def map between LV_output and Descending for
    vars t and t;
  enddef;
  def map between LV_output and AorticRoot for
    vars t and t;
    vars v_LV and Sf_in;
  enddef;
enddef;
